<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Renders the current scene to a texture and applies perspective mapping as a post-processing effect.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>ClearColor</MemberName>
        <Name>ClearColor</Name>
        <Category>Misc</Category>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderTexture">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:Width xsi:nil="true" />
          <gl:Height xsi:nil="true" />
          <gl:InternalFormat>Rgba</gl:InternalFormat>
          <gl:WrapS>ClampToEdge</gl:WrapS>
          <gl:WrapT>ClampToEdge</gl:WrapT>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>PerspectiveMap</gl:ShaderName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Destination" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:WarpPerspective" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>transform</gl:UniformName>
          <gl:ShaderName>PerspectiveMap</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>PerspectiveMap</gl:ShaderName>
          <gl:MeshName>ViewportQuad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>