<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Renders the environment using a view direction vector map for each fragment in the current viewport.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>ViewMap</gl:ShaderName>
          <gl:TextureTarget>TextureCubeMap</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="FileName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:LoadImage">
          <gl:Width xsi:nil="true" />
          <gl:Height xsi:nil="true" />
          <gl:InternalFormat>Rgb32f</gl:InternalFormat>
          <gl:WrapS>Repeat</gl:WrapS>
          <gl:WrapT>Repeat</gl:WrapT>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
          <gl:FileName />
          <gl:ColorType>Unchanged</gl:ColorType>
          <gl:FlipMode>Vertical</gl:FlipMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture1</gl:TextureSlot>
          <gl:ShaderName>ViewMap</gl:ShaderName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>ViewMap</gl:ShaderName>
          <gl:MeshName>ViewportQuad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>