<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Draws multiple colored circles using the input array as position data.</Description>
  <Workflow xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>projection</q1:UniformName>
          <q1:ShaderName>CircleArray</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LocationX" />
        <Property Name="LocationY" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Diameter" />
      </Expression>
      <Expression xsi:type="PropertySourceOfCreateScaleSingle">
        <MemberName>X</MemberName>
        <Value>0.02</Value>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ExtentX" />
          <Property Name="ExtentY" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="LocationX" />
              <Property Name="Y" DisplayName="LocationY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:CreateTranslation">
                <q1:X>0</q1:X>
                <q1:Y>0</q1:Y>
                <q1:Z>0</q1:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="ExtentX" />
              <Property Name="Y" DisplayName="ExtentY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:Scale">
                <q1:Order>Prepend</q1:Order>
                <q1:X>0.02</q1:X>
                <q1:Y>0.02</q1:Y>
                <q1:Z>1</q1:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorR" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="X" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorG" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Y" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorB" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Z" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorA" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="W" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateVector4">
          <q1:X>1</q1:X>
          <q1:Y>1</q1:Y>
          <q1:Z>1</q1:Z>
          <q1:W>1</q1:W>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>color</q1:UniformName>
          <q1:ShaderName>CircleArray</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Sample" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMeshInstanced">
          <q1:ShaderName>CircleArray</q1:ShaderName>
          <q1:MeshName>Quad</q1:MeshName>
          <q1:Usage>DynamicDraw</q1:Usage>
          <q1:InstanceAttributes>
            <q1:InstanceAttributeMapping>
              <q1:Size>2</q1:Size>
              <q1:Normalized>false</q1:Normalized>
              <q1:Type>Float</q1:Type>
              <q1:Divisor>1</q1:Divisor>
            </q1:InstanceAttributeMapping>
          </q1:InstanceAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="22" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="7" Label="Source3" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="20" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="20" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="20" Label="Source3" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="20" Label="Source4" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source5" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="21" To="23" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.PropertySource`2[[Bonsai.Shaders.CreateScale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null],[System.Single, mscorlib, Version=4.0.0.0, Culture=neutral, PublicKeyToken=b77a5c561934e089]], Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.CombineLatest, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Reactive.Sample, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateTranslation, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateVector4, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMeshInstanced, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Scale, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>