<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Draws a single colored quad.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExtentX" />
        <Property Name="ExtentY" />
        <Property Name="LocationX" />
        <Property Name="LocationY" />
        <Property Name="Layer" />
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>Angle</Name>
        <Description>The angle of the quad.</Description>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="bv:AngleProperty">
          <bv:Value>0</bv:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="LocationX" />
              <Property Name="Y" DisplayName="LocationY" />
              <Property Name="Z" DisplayName="Layer" Description="The optional drawing overlay priority. Lower numbers appear below higher numbers." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Translate">
                <gl:Order>Prepend</gl:Order>
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="ExtentX" Description="The size of the quad along the x-axis." />
              <Property Name="Y" DisplayName="ExtentY" Description="The size of the quad along the y-axis." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Scale">
                <gl:Order>Prepend</gl:Order>
                <gl:X>1</gl:X>
                <gl:Y>1</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Angle" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RotateZ">
                <gl:Order>Prepend</gl:Order>
                <gl:Angle>0</gl:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>transform</gl:UniformName>
                <gl:ShaderName>Color</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorR" Description="The red component of the quad color." Category="Texture Mapping" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>X</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorG" Description="The green component of the quad color.&#xD;&#xA;" Category="Texture Mapping" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Y</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorB" Description="The blue component of the quad color.&#xD;&#xA;" Category="Texture Mapping" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Z</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="ColorA" Description="The alpha, or opacity, component of the quad color.&#xD;&#xA;" Category="Texture Mapping" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>W</MemberName>
        <Name />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector4">
          <gl:X>1</gl:X>
          <gl:Y>1</gl:Y>
          <gl:Z>1</gl:Z>
          <gl:W>1</gl:W>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateUniform">
          <gl:UniformName>color</gl:UniformName>
          <gl:ShaderName>Color</gl:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>Color</gl:ShaderName>
          <gl:MeshName>Quad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="5" Label="Source2" />
      <Edge From="1" To="5" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source3" />
      <Edge From="5" To="18" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="18" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="18" Label="Source3" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source4" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source5" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>