<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Renders the current scene to a texture and applies mesh mapping and brightness correction as a post-processing effect.</Description>
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q3="clr-namespace:BonVision;assembly=BonVision" xmlns:q2="clr-namespace:Bonsai.IO;assembly=Bonsai.System" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:RenderTexture">
          <q1:RenderState />
          <q1:ClearColor>Gray</q1:ClearColor>
          <q1:ClearMask>DepthBufferBit ColorBufferBit</q1:ClearMask>
          <q1:Width xsi:nil="true" />
          <q1:Height xsi:nil="true" />
          <q1:WrapS>ClampToEdge</q1:WrapS>
          <q1:WrapT>ClampToEdge</q1:WrapT>
          <q1:MinFilter>Linear</q1:MinFilter>
          <q1:MagFilter>Linear</q1:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>ClearColor</MemberName>
        <Name>ClearColor</Name>
        <Category>Misc</Category>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BindTexture">
          <q1:TextureSlot>Texture0</q1:TextureSlot>
          <q1:ShaderName>MeshMap</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>MeshMap</q1:ShaderName>
          <q1:MeshName>MeshMap</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateVertexBuffer">
          <q1:MeshName>MeshMap</q1:MeshName>
          <q1:DrawMode>Quads</q1:DrawMode>
          <q1:Usage>DynamicDraw</q1:Usage>
          <q1:VertexAttributes>
            <q1:VertexAttributeMapping>
              <q1:Size>3</q1:Size>
              <q1:Normalized>false</q1:Normalized>
              <q1:Type>Float</q1:Type>
            </q1:VertexAttributeMapping>
            <q1:VertexAttributeMapping>
              <q1:Size>3</q1:Size>
              <q1:Normalized>false</q1:Normalized>
              <q1:Type>Float</q1:Type>
            </q1:VertexAttributeMapping>
          </q1:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="q2:CsvReader">
        <q2:FileName />
        <q2:ListSeparator>,</q2:ListSeparator>
        <q2:ScanPattern>%f</q2:ScanPattern>
        <q2:SkipRows>0</q2:SkipRows>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>FileName</MemberName>
        <Name>FileName</Name>
        <Category />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:SampleOnRenderFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q3:CreateVertexGrid" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.RenderTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.BindTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateVertexBuffer, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.IO.CsvReader, Bonsai.System, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.SampleOnRenderFrame, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>BonVision.CreateVertexGrid, BonVision, Version=0.1.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>