<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Specifies a normalized aspect-ratio preserving viewport.</Description>
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateOrthographic">
          <q1:Width>2.66666675</q1:Width>
          <q1:Height>2</q1:Height>
          <q1:NearClip>0.1</q1:NearClip>
          <q1:FarClip>1000</q1:FarClip>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:AspectRatio" />
      </Expression>
      <Expression xsi:type="Multiply">
        <Operand xsi:type="FloatProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property name="Width" selector="" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTransform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Gratings</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Checkerboard</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Image</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Color</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Circle</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>6</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>1</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.CreateOrthographic, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.AspectRatio, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.MultiplyBuilder, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Expressions.FloatProperty, Bonsai.Core, Version=2.4.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>