<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Creates a non-linear map for describing a spherical scene and specifies its edge limits, in degrees.</Description>
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q2="clr-namespace:;assembly=Extensions" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateOrthographicOffCenter">
          <q1:Left>-60</q1:Left>
          <q1:Right>60</q1:Right>
          <q1:Bottom>-30</q1:Bottom>
          <q1:Top>30</q1:Top>
          <q1:NearClip>0.1</q1:NearClip>
          <q1:FarClip>1000</q1:FarClip>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Left</MemberName>
        <Name>Left</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Right</MemberName>
        <Name>Right</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Bottom</MemberName>
        <Name>Bottom</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Top</MemberName>
        <Name>Top</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q2:CreateSphereGrid">
          <q2:Left>-60</q2:Left>
          <q2:Right>60</q2:Right>
          <q2:Bottom>-30</q2:Bottom>
          <q2:Top>30</q2:Top>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:Timer">
          <q1:DueTime>PT0S</q1:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateVertexBuffer">
          <q1:MeshName>SphereMap</q1:MeshName>
          <q1:DrawMode>Triangles</q1:DrawMode>
          <q1:Usage>StaticDraw</q1:Usage>
          <q1:VertexAttributes>
            <q1:VertexAttributeMapping>
              <q1:Size>3</q1:Size>
              <q1:Normalized>false</q1:Normalized>
              <q1:Type>Float</q1:Type>
            </q1:VertexAttributeMapping>
            <q1:VertexAttributeMapping>
              <q1:Size>3</q1:Size>
              <q1:Normalized>false</q1:Normalized>
              <q1:Type>Float</q1:Type>
            </q1:VertexAttributeMapping>
          </q1:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTransform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Gratings</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Checkerboard</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Image</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Color</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>Circle</q1:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="q1:UpdateUniform">
                <q1:UniformName>transform</q1:UniformName>
                <q1:ShaderName>CircleArray</q1:ShaderName>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge>
              <From>0</From>
              <To>1</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>1</From>
              <To>2</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>2</From>
              <To>3</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>3</From>
              <To>6</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>4</From>
              <To>0</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>6</From>
              <To>7</To>
              <Label>Source1</Label>
            </Edge>
            <Edge>
              <From>7</From>
              <To>5</To>
              <Label>Source1</Label>
            </Edge>
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>0</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>2</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>7</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>2</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>7</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>2</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>7</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>2</To>
        <Label>Source5</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source5</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.CreateOrthographicOffCenter, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>CreateSphereGrid, Extensions, Version=1.0.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.Timer, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateVertexBuffer, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>