<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircleArray.bonsai">
        <PositionData />
        <Diameter>0.04</Diameter>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <ColorR>1</ColorR>
        <ColorG>1</ColorG>
        <ColorB>1</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModelArray.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModelArray.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>Plane</MeshName>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>