<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:MeshResources">
          <gl:Meshes>
            <gl:MeshConfiguration xsi:type="gl:TexturedModel">
              <gl:Name>TextureSphere</gl:Name>
              <gl:FileName>Models\TextureSphere.obj</gl:FileName>
            </gl:MeshConfiguration>
          </gl:Meshes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures>
            <gl:TextureConfiguration xsi:type="gl:ImageTexture">
              <gl:Name>BlueMarble</gl:Name>
              <gl:Width xsi:nil="true" />
              <gl:Height xsi:nil="true" />
              <gl:InternalFormat>Rgba</gl:InternalFormat>
              <gl:WrapS>Repeat</gl:WrapS>
              <gl:WrapT>Repeat</gl:WrapT>
              <gl:MinFilter>Linear</gl:MinFilter>
              <gl:MagFilter>Linear</gl:MagFilter>
              <gl:FileName>Images\BlueMarble.jpg</gl:FileName>
              <gl:ColorType>Unchanged</gl:ColorType>
              <gl:FlipMode>Vertical</gl:FlipMode>
            </gl:TextureConfiguration>
          </gl:Textures>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.PerspectiveView.bonsai">
        <Eye>
          <X>1</X>
          <Y>0.5</Y>
          <Z>1</Z>
        </Eye>
        <Target>
          <X>-0.5</X>
          <Y>-0.25</Y>
          <Z>-0.5</Z>
        </Target>
        <Up>
          <X>0</X>
          <Y>1</Y>
          <Z>0</Z>
        </Up>
        <FieldOfView>90</FieldOfView>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>1</Y>
          <Z>1</Z>
        </Light>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>TexturedModel</gl:ShaderName>
          <gl:TextureName>BlueMarble</gl:TextureName>
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
        <TranslationX>0</TranslationX>
        <TranslationY>0</TranslationY>
        <TranslationZ>0</TranslationZ>
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <ScaleX>1</ScaleX>
        <ScaleY>1</ScaleY>
        <ScaleZ>1</ScaleZ>
        <Ambient>
          <X>0.2</X>
          <Y>0.2</Y>
          <Z>0.2</Z>
        </Ambient>
        <Diffuse>
          <X>0.8</X>
          <Y>0.8</Y>
          <Z>0.8</Z>
        </Diffuse>
        <Specular>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Specular>
        <SpecularExponent>10</SpecularExponent>
        <MeshName>TextureSphere</MeshName>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>