<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
      <Expression xsi:type="rx:PublishSubject">
        <Name>DrawStimuli</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <Count>5</Count>
        <RangeMin>-1</RangeMin>
        <RangeMax>1</RangeMax>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <Count>5</Count>
        <RangeMin>0.1</RangeMin>
        <RangeMax>1</RangeMax>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CreateGratings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawStimuli</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="LocationX" Selector="Item2.Item1" />
                <Property Name="Contrast" Selector="Item2.Item2" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>1</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <ExtentX>0.3</ExtentX>
              <ExtentY>0.3</ExtentY>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>0</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>