<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:glr="clr-namespace:Bonsai.Shaders.Rendering;assembly=Bonsai.Shaders.Rendering"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="glr:SceneResources">
          <glr:Scenes />
          <glr:PostProcessSteps>Triangulate</glr:PostProcessSteps>
          <glr:Scale>1</glr:Scale>
          <glr:RotationX>0</glr:RotationX>
          <glr:RotationY>0</glr:RotationY>
          <glr:RotationZ>0</glr:RotationZ>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:TextureResources">
          <gl:Textures />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>