<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-90</Left>
        <Right>90</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DrawStimulus</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
        <FaceSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
        <Count>8</Count>
        <RangeMin>0</RangeMin>
        <RangeMax>330</RangeMax>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Permutation" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Angle" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>DirStim</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimulus</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Angle" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>45</ExtentX>
                    <ExtentY>45</ExtentY>
                    <SpatialFrequency>0.25</SpatialFrequency>
                    <TemporalFrequency>1</TemporalFrequency>
                    <Phase>0</Phase>
                    <Angle>141.428574</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>5</Radius>
                    <Aperture>0.1</Aperture>
                    <Opacity>1</Opacity>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>UpdatePD</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="PDstate" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>1</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>QuadState</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawStimulus</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ExtentX>45</ExtentX>
                    <ExtentY>45</ExtentY>
                    <SpatialFrequency>0.25</SpatialFrequency>
                    <TemporalFrequency>1</TemporalFrequency>
                    <Phase>0</Phase>
                    <Angle>90</Angle>
                    <SquareWave>false</SquareWave>
                    <Contrast>0</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>5</Radius>
                    <Aperture>0.1</Aperture>
                    <Opacity>1</Opacity>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>UpdatePD</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" DisplayName="PDstate" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="FloatProperty">
                            <Value>0</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>QuadState</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0.25S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="11" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="10" Label="Source1" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>2</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>22</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Seed" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed>22</num:Seed>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Random</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DrawStimulus</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>QuadState</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="it" />
          <Property Name="ColorG" Selector="it" />
          <Property Name="ColorB" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>10</ExtentX>
        <ExtentY>10</ExtentY>
        <LocationX>-40</LocationX>
        <LocationY>-25</LocationY>
        <Layer>1</Layer>
        <Angle>0</Angle>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>QuadState</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="22" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>